---
API: 3
OpenSesame: 4.0.32
Platform: posix
---
set width 1920
set title "Smooth Pursuit - Exp 1"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_waitblanking yes
set psychopy_suppress_warnings yes
set psychopy_screen 1
set psychopy_monitor testMonitor
set psychopy_gamma unchanged
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/home/stimulus/projects/2025SmoothPursuit1/experiment"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#808080"

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prep True
	run fixate True
	run move True
	run break "=(cur_trial%block_size == 0) and (cur_trial!=total_trials) or paused"

define inline_script break
	set description "Führt Python-Code aus"
	___run__
	canvas.clear()
	canvas["break_text"] = Text("You may now take a break. Press any key to continue when you are ready to proceed.", color="black", font_size=48)
	canvas.show()
	keyboard = Keyboard()
	_, _ = keyboard.get_key()
	paused = False
	__end__
	set _prepare ""

define inline_script evaluate_practice
	set description "Führt Python-Code aus"
	___run__
	canvas.clear()
	avg_ratio = sum(accuracies) / len(accuracies)
	feedback_str = f"On average, your eyes were on target {avg_ratio*100:.0f}%. "
	if avg_ratio > .9:
	    feedback_str += "Very good!\nPress any key to proceed to the main experiment."
	elif avg_ratio > .7:
	    feedback_str += "Not bad.\nPress any key to proceed to the main experiment."
	else:
	    feedback_str += "Something may not be right.\n\nPress r to recalibrate and repeat. Press w to proceed to the main experiment anyway."
	canvas.text(feedback_str, color="black", font_size=48)
	canvas.show()
	if avg_ratio <= .7:
	    keyboard = Keyboard(keylist=[u'r', u'w'])
	    key, _ = keyboard.get_key()
	    if key == "r":
	        send_triggers(3,'Recalibration start')
	        eyetracker.stop_recording()
	        eyetracker.calibrate()
	        eyetracker.start_recording()
	        send_triggers(4,'Recalibration end')
	        accuracies = []
	        items.run("practiceloop")
	        items.run("evaluate_practice")
	else:
	    keyboard = Keyboard()
	    key, _ = keyboard.get_key()
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run setup True
	run instructions True
	run new_pygaze_start_recording True
	run set_practice True
	run practiceloop True
	run evaluate_practice True
	run set_main True
	run mainloop True
	run new_pygaze_stop_recording True

define inline_script fixate
	set description "Führt Python-Code aus"
	___run__
	win.flip()
	# wait for eyes to fixate for a certain period of time, and recalibrate if necessary
	if not wait_for_gaze(fix_pos, 2500, samplerate=200, tolerance=64, gaze_timeout=10000):
	    send_triggers(3,'Recalibration start')
	    eyetracker.stop_recording()
	    eyetracker.calibrate()
	    eyetracker.start_recording()
	    send_triggers(4,'Recalibration end')
	    items.run(u"prep")
	    items.run(u"fixate")
	__end__
	set _prepare ""

define inline_script general_setup
	set description "Executes Python code"
	___run__
	from pylsl import StreamInfo, StreamOutlet
	import math
	from math import atan2, degrees
	import random
	from psychopy import visual, core
	import numpy as np
	import pygaze
	
	# initialise variables we need to run trials
	fixated = False
	cur_trial = 0
	circle_reduction = 0.
	
	random.seed(var.subject_nr) # Set the seed to the subject nr to make the randomization of the images reproducable (especially for the case when the experiments needs to be restarted with a later trial) 
	
	"""variables and functions for converting between visual angle and pixels"""
	mon_height = 30.7 # in cm
	mon_distance = 74.5 # in cm
	mon_refresh = 390 # in Hz
	deg_per_sec = 10 # visual degrees to move per second
	resolution = np.array((1920, 1080))
	centre = resolution // 2
	
	# globals
	block_size = 30
	follow_str = "After convergence, FOLLOW the moving image."
	fix_str = "After convergence, STAY on the still image."
	log_vars = ["follow", "left", "filename", "hit_ratio"]
	jitt_low, jitt_high = 300, 500
	circle_kwargs = {"color":"black", "lineWidth":14}
	paused = False
	
	# get the trial number
	files = pool.files()
	files = [f for f in files if f[-4:] == ".png"]
	total_trials = 257 # there might be a way to auto-set this, but i have not figured it out yet
	
	# set up eyetracker
	eyetracker.send_command("calibration_area_proportion = 0.60 0.75")
	eyetracker.send_command("screen_write_prescale = 8")
	eyetracker.send_command("validation_area_proportion = 0.60 0.75")
	eyetracker.send_command("calibration_type = HV13") # automatically works to set validation_type as well.
	# new_pygaze_init runs a calibration by default at init, but that will not have the custom parameters. 
	# Thus we have unchecked 'calibrate' from the pygaze_init and are triggering the first calibration here through code.
	#eyetracker.send_command("calibration_targets = 960,540 960,988 288,540 1632,540")
	#eyetracker.send_command("validation_targets = 960,540 960,988 288,540 1632,540")
	#eyetracker.send_command("calibration_sequence_ = 0,1,2,3")
	#eyetracker.send_command("validation_sequence_ = 0,1,2,3")
	#eyetracker.send_command("calibration_type = H3")
	eyetracker.calibrate()
	eyetracker.start_recording()
	# Setup your marker streams - EEG
	
	# Setup LSL
	# Create stream info
	info = StreamInfo(name="experiment_markers", type="Markers", channel_count=1,channel_format="string", source_id="opensesame_markers_001")
	outlet = StreamOutlet(info)
	
	
	## functions
	# calculate degrees per pixel
	deg_per_px = degrees(atan2(.5*mon_height, mon_distance)) / (.5*height)
	def ang2pix(angle):
	    # convert visual angle to pixel size
	    return int(round(angle / deg_per_px))
	def pix2ang(pix):
	    # convert pixel size to visual angle
	    return pix * deg_per_pix
	
	# calculate these while we're here
	pix_per_sec = ang2pix(deg_per_sec)
	pix_per_frame = int(round(pix_per_sec / mon_refresh))
	
	# trigger function
	def send_triggers(trig_no, trig_name):
	    """Send value as hardware trigger and LSL marker."""
	
	    trig_str = f"trigger={trig_no:02d} {trig_name} | image={var.filename}"
	
	    # send to ET 
	    eyetracker.log(trig_str)
	    # send to LSL
	    outlet.push_sample([trig_str])
	    # show to researcher in console
	    print(trig_str)
	
	def centre_eyecoord(coord):
	    return (coord[0] - width/2, coord[1] - height/2)
	
	def is_eye_on(point, tolerance, flip=True):
	    if flip:
	        point = (point[0], point[1] * -1)
	    gazepos = centre_eyecoord(eyetracker.sample())
	    #print(f"Point {point}, pos: {gazepos}")
	    d = math.sqrt((gazepos[0] - point[0])**2 + (gazepos[1] - point[1])**2)
	    # check if the distance is 'small enough'
	    if d < tolerance:
	        return True
	    return False
	
	# define eye position checking functions
	def wait_for_gaze(point, duration, tolerance=128, gaze_timeout=5000, samplerate=5, flip=True):
	    """
	    check if the user is looking at a point within a euclidean distance of 'tolerance' px from a given point. Timeout: recalibrate ET and restart fixation check if not fixated within 'gaze_timeout' ms
	    """
	    fstart_time = clock.time()
	    cur_time = clock.time()
	    gaze_in_start_time = clock.time()
	    gaze_in_circle = False
	    while (cur_time - fstart_time) < gaze_timeout:
	        clock.sleep(samplerate) # in ms
	        # check if the distance is small enough
	        if is_eye_on(point, tolerance, flip=flip):
	            # to make sure gaze is within tolerance for 'duration'
	            if gaze_in_circle == False:
	                gaze_in_start_time = clock.time()
	                gaze_in_circle = True
	            elif (clock.time() - gaze_in_start_time) > duration:
	                # ideally, duration must be larger then diff
	                var.fixated = True
	                print('fixated -> True')
	                return True
	        cur_time = clock.time()
	    return False
	
	log.write_vars()
	column_str = "\n"
	for lv in log_vars:
	    column_str += f"{lv},"
	log.write(column_str[:-1])
	__end__
	set _prepare ""

define inline_script instr
	set description "Führt Python-Code aus"
	___run__
	## setup canvas and stimuli
	canvas = Canvas(color="gray")
	fix_pos = (0, -ang2pix(7))
	
	# need to get the image size
	image = visual.ImageStim(win, image=pool["smiley.png"])
	image_size = image.size
	circle_radius = max(image_size)/2
	circle_radius -= int(round(circle_radius * circle_reduction))
	
	fix = visual.TextStim(win, text="+", pos=fix_pos, color="black", bold=True, height=48)
	circle = visual.Circle(win, pos=(0, 0), radius=circle_radius, fillColor=None, **circle_kwargs)
	fix_circle = visual.Circle(win, pos=(0, 0), radius=circle_radius, fillColor=None, **circle_kwargs)
	instructions = visual.TextStim(win, text="You will see circles moving across the screen like below. You should keep your eyes focussed on the symbol below them.", pos=(0, ang2pix(6)), color="black", bold=True, height=48, wrapWidth=1800)
	key_text = visual.TextStim(win, "Press any key to continue", pos=(0, -ang2pix(10)), color="black", bold=True, height=40, wrapWidth=1800)
	
	# get basic parameters calculated
	img_width = image_size[0]
	left_point = -1 * (width // 2) - img_width // 2
	right_point = (width // 2) + img_width // 2
	sleep_time = 1000 / mon_refresh
	
	## calculate the x coordinates 
	cur_x = 0.
	x_frames = []
	# left to centre
	while cur_x > left_point:
	    x_frames.append(cur_x)
	    cur_x -= pix_per_frame
	# flip the order to make it left to centre
	x_frames = x_frames[::-1]
	# centre to right 
	cur_x = 0.
	while cur_x < right_point:
	    cur_x += pix_per_frame
	    x_frames.append(cur_x)
	
	# here we go
	keyboard = Keyboard()
	response = None
	looping = True
	instruction_stage = 0
	while looping:
	    revealed = False
	    for x_f in x_frames:
	        if x_f == 0.: # switch to image at the half-way point
	            revealed = True
	        circle.pos = (x_f, 0)
	        if revealed:
	            image.pos = (x_f, 0)
	            image.draw()
	        # listen for keyboard response, push instructions forward if so
	        response, _ = keyboard.get_key(timeout=sleep_time)
	        if response:
	            instruction_stage += 1
	            if instruction_stage == 1:
	                instructions = visual.TextStim(win, text="When the circles converge, move your eyes UP from the symbol to the centre to focus on them.", pos=(0, ang2pix(6)), color="black", bold=True, height=48, wrapWidth=1800)
	            elif instruction_stage == 2:
	                instructions = visual.TextStim(win, text="Then you will do one of two things: either 1) follow the moving image as it continues to move across the screen, or 2) keep your eyes focussed on the still image in the centre.", pos=(0, ang2pix(6)), color="black", bold=True, height=48, wrapWidth=1800)
	            elif instruction_stage == 3:
	                instructions = visual.TextStim(win, text="The symbol below will tell you which you should do. It will be either be an F for FOLLOW or an S for STAY.\nUnderstand?", pos=(0, ang2pix(6)), color="black", bold=True, height=48, wrapWidth=1800)
	            else:
	                looping = False
	                break
	        fix.draw()
	        circle.draw()
	        fix_circle.draw()
	        instructions.draw()
	        key_text.draw()
	        win.flip()
	    x_frames = x_frames[::-1]
	__end__
	set _prepare ""

define sequence instructions
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instr True

define loop mainloop
	set source_file "main_order_reduced_250.csv"
	set source file
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Element aus"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run block_sequence

define inline_script move
	set description "Führt Python-Code aus"
	___run__
	## move the stimuli across the screen
	current_target = fix
	half_width = 128
	hits = 0
	revealed = False
	# replace instructional symbol with +
	fix.opacity = 0
	fix.draw()
	fix = visual.TextStim(win, text="+", pos=(fix_pos[0], fix_pos[1]), color="black", height=38, bold=True)
	fix.draw()
	# jittered delay
	clock.sleep(random.randint(jitt_low, jitt_high))
	# main loop
	if not practice:
	    send_triggers(10, f"Image moves | {triggername}")
	for x_f in x_frames:
	    if x_f == 0.: # centre
	        # change the fixation to a neutral '+'
	        fix = visual.TextStim(win, text="+", pos=(fix_pos[0], fix_pos[1]), color="black", height=38, bold=True)
	        fix_stimulus = visual.ImageStim(win, image=pool[filename])
	        stimulus = visual.ImageStim(win, image=pool[filename])
	        # this if-else makes the moving image overlap the still image during SP,
	        # and reversed if fixation
	        if follow:
	            fix_stimulus.draw()
	            stimulus.draw()
	        else:
	            stimulus.draw()
	            fix_stimulus.draw()
	        if not practice:
	            send_triggers(15, f"Image centred | {triggername}")
	        # update valid target from fixation to still or moving image
	        if follow:
	            current_target = stimulus
	        else:
	            current_target = fix_stimulus
	        half_width = image_size[0] / 2
	        revealed = True
	    if revealed:
	        stimulus.pos = (x_f, 0)
	        stimulus.draw()
	        fix_stimulus.draw()
	    circle.pos = (x_f, 0)
	    circle.draw()
	    fix_circle.draw()
	    fix.draw()
	    # keep tabs on gaze accuracy
	    if is_eye_on(current_target.pos, half_width):
	        hits += 1
	    win.flip()
	    #clock.sleep(sleep_time)
	if not practice:
	    send_triggers(20, f"Image terminates | {triggername}")
	
	# calculate and wrap up the trial
	hit_ratio = hits / len(x_frames)
	accuracies.append(hit_ratio)
	print(f"\nOn target {hit_ratio:.3f}\n")
	if practice:
	    keyboard = Keyboard()
	    feedback = visual.TextStim(win, text=f"Your eyes were on target {hit_ratio*100:.0f}%", pos=(0, ang2pix(6)), color="black", height=48, wrapWidth=1900)
	    response = visual.TextStim(win, text="Press any key to continue", pos=(0, -ang2pix(9)), color="black", height=48)
	    feedback.draw()
	    response.draw()
	    win.flip()
	    keyboard.get_key()
	    
	log.write_vars(log_vars)
	__end__
	set _prepare ""

define pygaze_init new_pygaze_init
	set tracker_type EyeLink
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode diameter
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate no
	set calbeep no
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_start_recording new_pygaze_start_recording
	set status_msg start_recording
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording new_pygaze_stop_recording
	set status_msg stop_recording
	set description ""

define loop practiceloop
	set source_file "practise_order.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 0
	set continuous no
	set break_if_on_first no
	set break_if False
	run block_sequence

define inline_script prep
	set description "Führt Python-Code aus"
	___run__
	win.flip()
	
	# setup window and stimuli
	fix_pos = (0, -ang2pix(7))
	fix_symb = "F" if follow else "S"
	fix = visual.TextStim(win, text=fix_symb, pos=fix_pos, color="black", bold=True, height=48)
	fix.draw()
	
	# need to get the image size
	image = visual.ImageStim(win, image=pool[filename])
	image_size = image.size
	circle_radius = max(image_size)/2
	circle_radius -= int(round(circle_radius * circle_reduction))
	del image
	
	circle = visual.Circle(win, pos=(0, 0), radius=circle_radius, fillColor=None, **circle_kwargs)
	fix_circle = visual.Circle(win, pos=(0, 0), radius=circle_radius, fillColor=None, **circle_kwargs)
	fix_circle.draw()
	
	# instructions
	instr_str = follow_str if follow else fix_str
	if practice:
	    instructions = visual.TextStim(win, text=f"{instr_str}\n\nFirst, keep your focus on the {fix_symb} below.", pos=(0, ang2pix(6)), color="black", bold=True, height=48, wrapWidth=1800)
	    instructions.draw()
	
	# get basic parameters calculated
	img_width = image_size[0]
	left_point = -1 * (width // 2) - img_width // 2 - circle_kwargs["lineWidth"]
	right_point = (width // 2) + img_width // 2 + circle_kwargs["lineWidth"]
	sleep_time = 1000 / mon_refresh - 5
	
	# get the x coordinates 
	cur_x = 0.
	x_frames = []
	# left to centre
	while cur_x > left_point:
	    x_frames.append(cur_x)
	    cur_x -= pix_per_frame
	# flip the order to make it left to centre
	x_frames = x_frames[::-1]
	# centre to right 
	cur_x = 0.
	while cur_x < right_point:
	    cur_x += pix_per_frame
	    x_frames.append(cur_x)
	# flip if right to left
	if not left:
	    x_frames = x_frames[::-1]
	    
	circle.pos = (x_frames[0], 0)
	circle.draw()
	
	# block/trial info
	cur_trial += 1
	cur_block = (cur_trial // block_size) + 1
	
	cond_text = "Smooth Pursuit" if follow else "Fixation"
	direction_text = "Left" if left else "Right"
	
	print(f"Trial: {cur_trial}/{total_trials} Block: {cur_block}")
	__end__
	set _prepare ""

define inline_script set_main
	set description "Führt Python-Code aus"
	___run__
	practice = False
	cur_trial = 0
	circle_reduction = 0.1 # proportion to shrink the circle
	__end__
	set _prepare ""

define inline_script set_practice
	set description "Führt Python-Code aus"
	___run__
	practice = True
	accuracies = []
	__end__
	set _prepare ""

define sequence setup
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_pygaze_init True
	run general_setup True

